PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = Delay Discounting
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 1.0
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      text [set every repeat]:
        $"GBP " + str(reward_today) + " today" + " or" + " GBP " + str(future_reward) + " after " + str(delay) + " days"
    KeyboardComponent key_resp
      allowedKeys = 't','l'
      forceEndRoutine = True
      registerOn = release
      startVal [time (s)] = 1.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = conditions file.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('reward_today', np.int64(20)), ('future_reward', np.int64(47)), ('delay', np.int64(17))]),
      OrderedDict([('reward_today', np.int64(69)), ('future_reward', np.int64(88)), ('delay', np.int64(84))]),
      OrderedDict([('reward_today', np.int64(88)), ('future_reward', np.int64(93)), ('delay', np.int64(49))]),
      OrderedDict([('reward_today', np.int64(1)), ('future_reward', np.int64(50)), ('delay', np.int64(55))]),
      OrderedDict([('reward_today', np.int64(61)), ('future_reward', np.int64(64)), ('delay', np.int64(18))]),
      OrderedDict([('reward_today', np.int64(92)), ('future_reward', np.int64(93)), ('delay', np.int64(80))]),
      OrderedDict([('reward_today', np.int64(32)), ('future_reward', np.int64(61)), ('delay', np.int64(9))]),
      OrderedDict([('reward_today', np.int64(21)), ('future_reward', np.int64(27)), ('delay', np.int64(26))]),
      OrderedDict([('reward_today', np.int64(45)), ('future_reward', np.int64(48)), ('delay', np.int64(62))]),
      OrderedDict([('reward_today', np.int64(58)), ('future_reward', np.int64(66)), ('delay', np.int64(64))]),
      OrderedDict([('reward_today', np.int64(54)), ('future_reward', np.int64(65)), ('delay', np.int64(58))]),
      OrderedDict([('reward_today', np.int64(5)), ('future_reward', np.int64(9)), ('delay', np.int64(23))]),
      OrderedDict([('reward_today', np.int64(39)), ('future_reward', np.int64(47)), ('delay', np.int64(4))]),
      OrderedDict([('reward_today', np.int64(95)), ('future_reward', np.int64(99)), ('delay', np.int64(33))])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
    Routine trial
  LoopTerminator trials
