PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = N back
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine trial
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    TextComponent mainfixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text [set every repeat] = +
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    TextComponent leterrrrrrr
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.7
      text [set every repeat] = $letter
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    KeyboardComponent respp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
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  Routine Instructions
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome!

        You will see letters one by one.
        Press SPACE if the current letter is the SAME as the previous letter (1-back).

        Press SPACE to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trailroutine
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    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      text = +
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    TextComponent letterrrrrrr
      letterHeight = 0.05
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 0.7
      text [set every repeat] = $letter
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    KeyboardComponent resp
      allowedKeys = 'space'
      forceEndRoutine = False
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.5
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  Routine thanks_
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    TextComponent endtext
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You are done!

        Thank you for participating.

        Press SPACE to exit.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thanks
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  Routine thanks_2
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    TextComponent thankyou
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Thank you for Participating! 
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    KeyboardComponent end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator mainloop loopType="TrialHandler"
    conditionsFile = C:/Users/Khanak/OneDrive/Desktop/N Back/Main.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'letter': 'A'},
      {'letter': 'B'},
      {'letter': 'C'},
      {'letter': 'D'},
      {'letter': 'D'},
      {'letter': 'F'},
      {'letter': 'H'},
      {'letter': 'J'},
      {'letter': 'K'},
      {'letter': 'K'},
      {'letter': 'L'},
      {'letter': 'M'},
      {'letter': 'M'},
      {'letter': 'P'},
      {'letter': 'Q'},
      {'letter': 'R'},
      {'letter': 'R'},
      {'letter': 'T'},
      {'letter': 'V'},
      {'letter': 'W'},
      {'letter': 'W'},
      {'letter': 'X'},
      {'letter': 'Z'},
      {'letter': 'A'},
      {'letter': 'A'},
      {'letter': 'C'},
      {'letter': 'D'},
      {'letter': 'E'},
      {'letter': 'F'},
      {'letter': 'F'},
      {'letter': 'H'},
      {'letter': 'J'},
      {'letter': 'L'},
      {'letter': 'L'},
      {'letter': 'N'},
      {'letter': 'P'},
      {'letter': 'Q'},
      {'letter': 'Q'},
      {'letter': 'S'},
      {'letter': 'T'},
      {'letter': 'T'},
      {'letter': 'V'},
      {'letter': 'W'},
      {'letter': 'Y'},
      {'letter': 'Y'},
      {'letter': 'Z'},
      {'letter': 'B'},
      {'letter': 'D'},
      {'letter': 'D'},
      {'letter': 'F'},
      {'letter': 'G'},
      {'letter': 'G'},
      {'letter': 'H'},
      {'letter': 'J'},
      {'letter': 'K'},
      {'letter': 'K'},
      {'letter': 'M'},
      {'letter': 'N'},
      {'letter': 'N'},
      {'letter': 'P'},
      {'letter': 'R'},
      {'letter': 'R'},
      {'letter': 'S'},
      {'letter': 'T'},
      {'letter': 'V'},
      {'letter': 'V'},
      {'letter': 'X'},
      {'letter': 'Y'},
      {'letter': 'Y'},
      {'letter': 'Z'},
      {'letter': 'A'},
      {'letter': 'C'},
      {'letter': 'C'},
      {'letter': 'E'},
      {'letter': 'F'},
      {'letter': 'H'},
      {'letter': 'H'},
      {'letter': 'J'},
      {'letter': 'K'},
      {'letter': 'M'},
      {'letter': 'M'},
      {'letter': 'N'},
      {'letter': 'P'},
      {'letter': 'Q'},
      {'letter': 'Q'},
      {'letter': 'R'},
      {'letter': 'T'},
      {'letter': 'T'},
      {'letter': 'V'},
      {'letter': 'W'},
      {'letter': 'X'},
      {'letter': 'X'},
      {'letter': 'Z'},
      {'letter': 'A'},
      {'letter': 'B'},
      {'letter': 'B'},
      {'letter': 'D'},
      {'letter': 'F'},
      {'letter': 'N'}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
    Routine trial
  LoopTerminator mainloop
  Routine thanks_2
